PsychoPy2experiment version="3.0.5"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1680, 1050]
  color = Black
  expName = Experiment
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Routines
  Routine Outro
    TextComponent Outro_text
      letterHeight = .1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = This concludes the experiment.
      wrapWidth = 10
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  Routine Intro
    TextComponent Intro_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        Listen or watch for what is being said.

        Select the option that best fits the stimulus.
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 3
      stopVal [duration (s)] = 3
      wrapWidth = 10
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      text:
        Wait for the speaker to finish.
        Press b if the speaker says "BA".
        Press d if the speaker says "DA".
        Press g if the speaker says "GA".
  Routine Audio_Tuning
    CodeComponent Audio_test
      Code Type = Py
      Begin Experiment:
        debug = True
        accuracy = 0
        target_accuracy = .5
        noise_level = 0
        minimum_iterations = 10

        margin_of_error = .05
      Begin Routine:
        from psychopy import core
        import random

        output_stim = Audio_from_video_file

        def start_video(video_file, noise_level):
            output_stim.setMovie(video_file)
            output_stim.seek(0)
            output_stim.play()
            while output_stim.status != visual.FINISHED:
                audio_text.draw()
                output_stim.draw()
                video_noise.draw
                win.flip()

        ## Setup Section
        iteration_count = 0
        target_met = False

        subject_audio_answers = [[] for x in range(len(options))]

        ## Experiment Section
        while iteration_count < minimum_iterations:
            # Select a stimulus from the list of files
            correct_answer_index = random.randint(0, len(options)-1)
            correct_answer = options[correct_answer_index]
            test_file = correct_answer + ".mov"
            correct_answer = correct_answer[0].lower()

            # Play the video
            start_video(test_file, noise_level)

            # Get response
            prompt.draw()
            win.flip()

            # Read a character
            c = event.waitKeys()
            if c[0] == correct_answer:
                subject_audio_answers[correct_answer_index].append(1)
                noise_level += 1
                accuracy += 1
            elif c[0] == 'space':
                break
            else:
                subject_audio_answers[correct_answer_index].append(0)
                noise_level -= 1
            iteration_count += 1
      End Routine:
        for index, option in enumerate(subject_audio_answers):
            try:
                print("Option " + options[index] + " average: %" + str(sum(option)/len(option) * 100))
            except:
                pass
    MovieComponent Audio_from_video_file
      backend = moviepy
      forceEndRoutine = False
      movie = GA.mov
      size = (0, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
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    TextComponent audio_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
      text = Audio is playing.
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  Routine Video_Tuning
    CodeComponent Video_test
      Code Type = Py
      Begin Experiment:
        debug = True
        accuracy = 0
        target_accuracy = .5
        noise_level = 0
        minimum_iterations = 10

        margin_of_error = .05

        options = ["BA", "DA", "GA"]
      Begin Routine:
        from psychopy import core
        import random

        output_stim = video_stimulus

        def start_video(video_file, noise_level):
            output_stim.setMovie(video_file)
            output_stim.seek(0)
            output_stim.play()
            while output_stim.status != visual.FINISHED:
                output_stim.draw()
                video_noise.draw
                win.flip()

        ## Setup Section
        iteration_count = 0
        target_met = False

        subject_video_answers = [[] for x in range(len(options))]

        ## Experiment Section
        while iteration_count < minimum_iterations:
            # Select a stimulus from the list of files
            correct_answer_index = random.randint(0, len(options)-1)
            correct_answer = options[correct_answer_index]
            test_file = correct_answer + ".mov"
            correct_answer = correct_answer[0].lower()

            # Play the video
            start_video(test_file, noise_level)

            # Get response
            prompt.draw()
            win.flip()

            # Read a character
            c = event.waitKeys()
            if c[0] == correct_answer:
                subject_video_answers[correct_answer_index].append(1)
                noise_level += 1
                accuracy += 1
            elif c[0] == 'space':
                break
            else:
                subject_video_answers[correct_answer_index].append(0)
                noise_level -= 1
            iteration_count += 1
      End Routine:
        for index, option in enumerate(subject_video_answers):
            try:
                print("Option " + options[index] + " average: %" + str(sum(option)/len(option) * 100))
            except:
                pass
    MovieComponent video_stimulus
      No audio = True
      backend = moviepy
      forceEndRoutine = False
      movie = GA.mov
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
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    TextComponent prompt
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
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      text:
        What was said:
        BA, DA, or GA?
        Press B, D, or G.
    NoiseStimComponent video_noise
      interpolate = nearest
      noiseBW = 1
      noiseBWO = 1
      noiseBaseSf = 8.0
      noiseClip = 3.0
      noiseElementSize = 0.0625
      noiseFilterLower = 1.0
      noiseFilterOrder = 0.0
      noiseFilterUpper = 8.0
      noiseFractalPower = 0.0
      noiseImage = None
      noiseNewSample = None
      noiseNewSampleWhen = 1
      noiseType = Isotropic
      sf = None
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
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Flow
  Routine Intro
  Routine Video_Tuning
  Routine Audio_Tuning
  Routine Outro
